CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124145122
GitHash:0c7fb94
ModuleCount:27
HasImagePlaneDetails:False

LoadImages:[module_num:1|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notes:['']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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|/home/nilsahin
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tiff
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:^(?P<WellID>.*).tiff
    Type the regular expression that finds metadata in the subfolder path:_T(?P<ImageLocation>[0-9]{2})
    Channel count:2
    Group the movie frames?:Yes
    Grouping method:Interleaved
    Number of channels per group:2
    Load the input as images or objects?:Images
    Name this loaded image:UncorrGFP
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    Channel number:1
    Rescale intensities?:No
    Load the input as images or objects?:Images
    Name this loaded image:UncorrRFP
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    Channel number:2
    Rescale intensities?:No

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:UncorrRFP
    Name the output image:IllumRFP
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:3|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notes:['']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
    Select the input image:UncorrGFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:4|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
    Select the input image:UncorrRFP
    Name the output image:RFP
    Select the illumination function:IllumRFP
    Select how the illumination function is applied:Divide
    Select the input image:UncorrGFP
    Name the output image:GFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Divide

EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:RFP
    Name the output image:EnhancedRFP
    Select the operation:Enhance
    Feature size:10
    Feature type:Circles
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
Smooth:[module_num:6|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
    Select the input image:EnhancedRFP
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
RescaleIntensity:[module_num:7|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
    Select the input image:FilteredImage
    Name the output image:RescaledRFP
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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notes:['']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
    Select the input image:RescaledRFP
    Name the primary objects to be identified:NucleiUnfiltered
    Typical diameter of objects, in pixel units (Min,Max):6,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:9|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notes:['']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
    Select the input objects:NucleiUnfiltered
    Name the objects to be identified:CellsUnfiltered
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaledRFP
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei2
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:CellsUnfiltered
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:11|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notes:['']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
    Name the output objects:Cells22
    Select the object to filter:CellsUnfiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:300.0
    Filter using a maximum measurement value?:Yes
    Maximum value:5000
    Select additional object to relabel:Nuclei2
    Name the relabeled objects:Nuclei22
    Retain outlines of relabeled objects?:No
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
MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:RFP
    Select objects to measure:Nuclei22

FilterObjects:[module_num:13|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
    Name the output objects:Nuclei
    Select the object to filter:Nuclei22
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:NucOutline
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:Intensity_MeanIntensity_RFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0003
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:Cells22
    Name the relabeled objects:Cells
    Retain outlines of relabeled objects?:Yes
    Name the outline image:CellOutline

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Cells
    Name the output image:CellObjectN
    Select the color format:uint16
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:OutlineOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CellOutline
    Select outline color:Green
    Select outlines to display:NucOutline
    Select outline color:Red

MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:17|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
    Hidden:2
    Select an image to measure:GFP
    Select an image to measure:RFP
    Select objects to measure:Nuclei
    Select objects to measure:Cells

MeasureObjectRadialDistribution:[module_num:18|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
    Hidden:1
    Hidden:2
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectRadialDistribution:[module_num:19|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
    Hidden:1
    Hidden:2
    Hidden:1
    Select an image to measure:RFP
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:20|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
    Hidden:1
    Hidden:2
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Texture scale to measure:8
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

MeasureTexture:[module_num:21|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
    Hidden:1
    Hidden:2
    Hidden:1
    Select an image to measure:RFP
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Texture scale to measure:8
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

MeasureGranularity:[module_num:22|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
    Image count:1
    Object count:2
    Select an image to measure:GFP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei

MeasureGranularity:[module_num:23|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
    Image count:1
    Object count:2
    Select an image to measure:RFP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
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
ExportToDatabase:[module_num:25|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notes:['']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
    Database type:MySQL / CSV
    Database name:HEH2_R2
    Add a prefix to table names?:Yes
    Table prefix:HEH2_R2
    SQL file prefix:SQL_
    Output file location:Default Output Folder|/home/nilsahin
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:HEH2_R2
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Never
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    Do you want to add group fields?:red
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    Do you want to add filter fields?:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
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    Create a CellProfiler Analyst workspace file?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OutlineOverlay
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Plate\\\\g<ImageLocation>_\\\\g<WellID>_GFPOutlineNumber
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|/home/nilsahin
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:27|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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